PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '999', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0,0,0]
  colorSpace = dkl
  expName = resting_state_demo
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine emotional_level
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    TextComponent rate_emotion_prompt
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请使用数字描述您目前的情绪状态：
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    SliderComponent slider_emotion
      font = Noto Sans SC
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "非常不高兴", "", "", "", "平静", "", "", "", "非常高兴"
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_emotion
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider_emotion.markerPos = 5
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'a' in keys:
                slider_emotion.markerPos = slider_emotion.markerPos - 1
            elif 's' in keys:
                slider_emotion.markerPos = slider_emotion.markerPos  + 1
      End Routine:
        thisExp.addData("Rating", slider_emotion.markerPos)
    KeyboardComponent key_resp_emotion
      allowedKeys = 'k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait4trigger_scanner
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    TextComponent wait4trigger_text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 即将开始，请等待。
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  Routine fake_stimulus
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    TextComponent fake_stimulus_text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 即将开始，请等待。
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  Routine resting
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    TextComponent fixation
      font = Noto Sans SC
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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  Routine think_content
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    TextComponent main_body_questionnaire
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = 我刚才的思维内容：
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    TextComponent item_text
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_thinking_content
      font = Noto Sans SC
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "完全没有", "", "", "", "一般", "", "", "", "几乎都是"
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_thinking_content
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider_thinking_content.markerPos = 5
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'a' in keys:
                slider_thinking_content.markerPos = slider_thinking_content.markerPos - 1
            elif 's' in keys:
                slider_thinking_content.markerPos = slider_thinking_content.markerPos  + 1
      End Routine:
        thisExp.addData("Rating", slider_thinking_content.markerPos)
    KeyboardComponent key_resp_thinking_content
      allowedKeys = 'k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent goodbye_text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 本阶段结束，请等待下一阶段的扫描。
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    KeyboardComponent key_resp_goodbye
      allowedKeys = 'k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine refresh
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    TextComponent text_refresh
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine rest_instruct
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    ImageComponent image_rest_instruct
      image = stimuli/rest_instruct.png
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_rest_instruct
      allowedKeys = 'k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
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    ImageComponent image_welcome
      image = stimuli/welcome.png
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_welcome
      allowedKeys = 'k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine emotion_instruct
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    ImageComponent image_emotion_instruct
      image = stimuli/emotion_instruct.png
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_emotion_instruct
      allowedKeys = 'k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine think_content_instruct
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    ImageComponent image_think_content_instruct
      image = stimuli/think_content_instruct.png
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_think_content_instruct
      allowedKeys = 'k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine refresh
  Routine emotional_level
  Routine refresh
  Routine rest_instruct
  Routine refresh
  Routine wait4trigger_scanner
  Routine fake_stimulus
  Routine resting
  Routine refresh
  Routine emotion_instruct
  Routine refresh
  Routine emotional_level
  Routine refresh
  Routine think_content_instruct
  Routine refresh
  LoopInitiator think_content_loop loopType="TrialHandler"
    conditionsFile = think_content_condition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'item': 'were about the past', 'number': 1},
      {'item': 'were about the future', 'number': 2},
      {'item': 'were about myself', 'number': 3},
      {'item': 'were about others', 'number': 4},
      {'item': 'were positive', 'number': 5},
      {'item': 'were negative', 'number': 6},
      {'item': 'were in the form of images', 'number': 7},
      {'item': 'were in the form of words', 'number': 8},
      {'item': 'made me feel happy', 'number': 9},
      {'item': 'made me feel sad', 'number': 10}]
    Routine think_content
    Routine refresh
  LoopTerminator think_content_loop
  Routine goodbye
