PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '999', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[0,0,0]
  colorSpace = dkl
  expName = rumination
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcome_screen
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    ImageComponent image_rum_instruct
      image = stimuli/rum_instruct.png
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_welcome
      allowedKeys = '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine emotional_level
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    TextComponent rate_emotion_prompt
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请使用数字描述您目前的情绪状态：
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    SliderComponent slider_emotion
      font = Noto Sans SC
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "非常不高兴", "", "", "", "平静", "", "", "", "非常高兴"
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_emotion
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider_emotion.markerPos = 5
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if '1' in keys:
                slider_emotion.markerPos = slider_emotion.markerPos - 1
            elif '2' in keys:
                slider_emotion.markerPos = slider_emotion.markerPos  + 1
      End Routine:
        thisExp.addData("Rating", slider_emotion.markerPos)
    KeyboardComponent key_resp_emotion
      allowedKeys = '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait4trigger_scanner
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    TextComponent wait4trigger_text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 即将开始，请等待。
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    KeyboardComponent scanner_trigger
      allowedKeys = 'S','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fake_stimulus
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    TextComponent fake_stimulus_text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 即将开始，请等待。
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  Routine think_content
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    TextComponent main_body_questionnaire
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = 我刚才的思维内容：
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    TextComponent item_text
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_thinking_content
      font = Noto Sans SC
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "完全没有", "", "", "", "一般", "", "", "", "几乎都是"
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_thinking_content
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider_thinking_content.markerPos = 5
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if '1' in keys:
                slider_thinking_content.markerPos = slider_thinking_content.markerPos - 1
            elif '2' in keys:
                slider_thinking_content.markerPos = slider_thinking_content.markerPos  + 1
      End Routine:
        thisExp.addData("Rating", slider_thinking_content.markerPos)
    KeyboardComponent key_resp_thinking_content
      allowedKeys = '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent goodbye_text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        本阶段结束，请等待下一阶段的扫描。
    KeyboardComponent key_resp_goodbye
      allowedKeys = 'a','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine refresh
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    TextComponent text_refresh
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine rumination
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    ImageComponent image_rum
      image [set every repeat] = $prompt_image
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine emotion_instruct
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    ImageComponent image_emotional_instruct
      image = stimuli/emotion_instruct.png
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_emotion_instruct
      allowedKeys = '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine think_content_instruct
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    ImageComponent image_think_content_instruct
      image = stimuli/think_content_instruct.png
      interpolate = nearest
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_think_content_instruct
      allowedKeys = '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome_screen
  Routine refresh
  Routine wait4trigger_scanner
  Routine fake_stimulus
  LoopInitiator rumination_loop loopType="TrialHandler"
    conditionsFile = rum_prompt_image.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prompt_number': 1, 'prompt_image': 'stimuli/rum_prompt_1.png'},
      {'prompt_number': 2, 'prompt_image': 'stimuli/rum_prompt_2.png'},
      {'prompt_number': 3, 'prompt_image': 'stimuli/rum_prompt_3.png'},
      {'prompt_number': 4, 'prompt_image': 'stimuli/rum_prompt_4.png'}]
    Routine rumination
  LoopTerminator rumination_loop
  Routine refresh
  Routine emotion_instruct
  Routine refresh
  Routine emotional_level
  Routine refresh
  Routine think_content_instruct
  Routine refresh
  LoopInitiator think_content_loop loopType="TrialHandler"
    conditionsFile = think_content_condition_task.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'item': '是关于过去的事情', 'number': 1},
      {'item': '是关于将来的事情', 'number': 2},
      {'item': '是关于我自己的', 'number': 3},
      {'item': '是关于他人的', 'number': 4},
      {'item': '是正性的、积极的事件', 'number': 5},
      {'item': '是负性的、消极的事件', 'number': 6},
      {'item': '是以图像或意象的形式进行思维', 'number': 7},
      {'item': '是以内部言语的形式进行思维', 'number': 8},
      {'item': '让我感到开心', 'number': 9},
      {'item': '让我感到悲伤', 'number': 10},
      {'item': '有多少是在“走神”', 'number': 11}]
    Routine think_content
    Routine refresh
  LoopTerminator think_content_loop
  Routine goodbye
